CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:404
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Drop
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:Drop
    Name the output image:RescaleIntensity
    Rescaling method:Divide each image by the same value
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    Divisor value:0.05
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):70,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
EnhanceOrSuppressFeatures:[module_num:7|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notes:['Use filtering to enhance the foci speckles in the image. The feature size setting should be specified to be at least as large as the largest feature to be enhanced.']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
    Select the input image:RescaleIntensity
    Name the output image:EnhancedGreen
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:8|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notes:['Mask the foci image using the nuclei objects.']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
    Select the input image:EnhancedGreen
    Name the output image:MaskedGreen
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:MaskedGreen
    Name the primary objects to be identified:h2ax
    Typical diameter of objects, in pixel units (Min,Max):5,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:4.0
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
RelateObjects:[module_num:10|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notes:['Establish a parent-child between the foci (â\x80\x9cchildrenâ\x80\x9d) and the nuclei (â\x80\x9cparentsâ\x80\x9d) in order to determine which foci belong to which nuclei. Then, calculate mean foci measurements for each nucleus.']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
    Parent objects:Nuclei
    Child objects:h2ax
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjectsG
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
ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\mask
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|FileName_Drop,Nuclei|Number_Object_Number,Nuclei|Children_h2ax_Count
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:My0917_48h_
    Overwrite existing files without warning?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
